PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = problem
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine step1
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    TextboxComponent problem
      alignment = top-left
      bold = False
      borderColor = -1.0000, -1.0000, 1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      text = Question> 
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    KeyboardComponent key
      allowedKeys = 'return'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent updateAi
      Code Type = Auto->JS
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      Begin Experiment:
        dialog_text = ""
      Each Frame:
        answer.setText(dialog_text)
      End Routine:
        # get current question
        question_text = problem.getText()

        # update dialog
        dialog_text += "\n"
        dialog_text += question_text
        dialog_text += "\n"
        dialog_text += "AI Answer> answer goes here"
        dialog_text += "\n"

        # print the question
        #print(dialog_text)
    TextboxComponent answer
      alignment = top-left
      bold = False
      borderColor = 1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.03
      pos = (0, +0.2)
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
      text = $dialog_text
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Flow
  LoopInitiator question loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine step1
  LoopTerminator question
