PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = tutorial
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine step1
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    TextboxComponent instruct
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text:
        Welcome to (insert lab name), I am (insert RA name), are you (participants name). (sentence about where participants will place belongings).
        Do you need corrective lenses for sight, and are they on your person?
        If yes: please, put them on for this experiment

        Click NEXT to start the task!
    MouseComponent instruct_mouse
      clickable = next_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent next_text
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine step2
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    TextboxComponent instruct2
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
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      text:
         “I am going to go over the informed consent sheet (hand them consent form). Please stop me and ask any questions regarding the consent form at any point. Today you going to complete a pre-test questionnaire on introductory statistical concepts, then watch a 12 minute video. You will be asked to fill out a series of questions regarding the contents of the video. It will take approximately 75 minutes to complete this study. There are minimal risk to participation in this research, however you can stop this experiment at anytime; while participation may not specifically benefit you, we believe it will improve general understanding of how humans learn statistical concepts. Your responses will be confidential and completely anonymous. For you participation you will be rewarded SONA credits.”
    MouseComponent instruct_mouse2
      clickable = next_text2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent next_text2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine step3_pretest
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    FormComponent pretest
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = pretest.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1.75, 0.6)
      startVal [time (s)] = 0.0
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    MouseComponent step3_mouse
      clickable = step3_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent step3_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      text = NEXT
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  Routine step3_pretest_old
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    TextboxComponent instruct3
      alignment = top-left
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.1, 0.1)
      size = (1.56, 0.8)
      startVal [time (s)] = 0.0
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      text:
        Pre Test

        Question 1: What does the standard deviation measure?
        A. The average value of a dataset.


        B. The difference between the highest and lowest values in a dataset.


        C. How spread out the data values are around the mean, indicating the typical deviation from the average value.


        D. The sum of all data values in a dataset.
    ButtonComponent answerA
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.75, +0.3)
      save = first click
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = A
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    ButtonComponent answerB
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.75, +0.1)
      save = first click
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = B
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    ButtonComponent answerC
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.75, -0.1)
      save = first click
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = C
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    ButtonComponent answerD
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.75, -0.3)
      save = first click
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      text = D
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  Routine step4_qestion1
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    FormComponent question1
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = question1.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      pos = (0, +0.1)
      responseColor = white
      size = (1.75, 0.8)
      startVal [time (s)] = 0.0
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    MouseComponent step4_mouse
      clickable = step3_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent step4_next
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      text = NEXT
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    TextboxComponent ai_dialog
      alignment = top-left
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      overflow = scroll
      pos = (+0.6, -0.3)
      size = (1.0, 0.3)
      startVal [time (s)] = 3.0
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      text:
        Ask a question of the ai.

        Question>
Flow
  Routine step1
  Routine step2
  Routine step3_pretest
  Routine step4_qestion1
